<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;module_units&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
    <import xlink:href="capillary_network_units.cellml">
        <units name="s2" units_ref="s2"/>
        <units name="Hz" units_ref="Hz"/>
        <units name="millis" units_ref="millis"/>
        <units name="per_millis" units_ref="per_millis"/>
        <units name="mm" units_ref="mm"/>
        <units name="m2" units_ref="m2"/>
        <units name="mm2" units_ref="mm2"/>
        <units name="m3" units_ref="m3"/>
        <units name="m4" units_ref="m4"/>
        <units name="mm3" units_ref="mm3"/>
        <units name="J_per_s" units_ref="J_per_s"/>
        <units name="mol_per_s" units_ref="mol_per_s"/>
        <units name="mmol_per_s" units_ref="mmol_per_s"/>
        <units name="umol_per_s" units_ref="umol_per_s"/>
        <units name="C_per_s" units_ref="C_per_s"/>
        <units name="mC_per_s" units_ref="mC_per_s"/>
        <units name="uC_per_s" units_ref="uC_per_s"/>
        <units name="nC_per_s" units_ref="nC_per_s"/>
        <units name="Cm_per_millis" units_ref="Cm_per_millis"/>
        <units name="m_per_s" units_ref="m_per_s"/>
        <units name="mm_per_s" units_ref="mm_per_s"/>
        <units name="um_per_s" units_ref="um_per_s"/>
        <units name="rad_per_s" units_ref="rad_per_s"/>
        <units name="m3_per_s" units_ref="m3_per_s"/>
        <units name="mL" units_ref="mL"/>
        <units name="per_milliL_s" units_ref="per_milliL_s"/>
        <units name="s_per_m3" units_ref="s_per_m3"/>
        <units name="s_per_milliV" units_ref="s_per_milliV"/>
        <units name="s_per_millis" units_ref="s_per_millis"/>
        <units name="millis_per_s" units_ref="millis_per_s"/>
        <units name="mm3_per_s" units_ref="mm3_per_s"/>
        <units name="l_per_s" units_ref="l_per_s"/>
        <units name="per_ml_s" units_ref="per_ml_s"/>
        <units name="J_per_mol" units_ref="J_per_mol"/>
        <units name="J_per_kmol_K" units_ref="J_per_kmol_K"/>
        <units name="J_per_M" units_ref="J_per_M"/>
        <units name="J_per_C" units_ref="J_per_C"/>
        <units name="J_per_C_s" units_ref="J_per_C_s"/>
        <units name="J_per_m" units_ref="J_per_m"/>
        <units name="J_per_m3" units_ref="J_per_m3"/>
        <units name="mmHg" units_ref="mmHg"/>
        <units name="m3_per_J" units_ref="m3_per_J"/>
        <units name="J_per_m3s" units_ref="J_per_m3s"/>
        <units name="m3_per_Js" units_ref="m3_per_Js"/>
        <units name="J2_per_m6" units_ref="J2_per_m6"/>
        <units name="Js2_per_C2" units_ref="Js2_per_C2"/>
        <units name="Js2_per_mol2" units_ref="Js2_per_mol2"/>
        <units name="Js_per_mol2" units_ref="Js_per_mol2"/>
        <units name="Js_per_C2" units_ref="Js_per_C2"/>
        <units name="J_per_mol2" units_ref="J_per_mol2"/>
        <units name="C2_per_J_s" units_ref="C2_per_J_s"/>
        <units name="J_per_C2" units_ref="J_per_C2"/>
        <units name="C2_per_J" units_ref="C2_per_J"/>
        <units name="mol_per_m3" units_ref="mol_per_m3"/>
        <units name="M" units_ref="M"/>
        <units name="mM" units_ref="mM"/>
        <units name="milliM" units_ref="milliM"/>
        <units name="uM" units_ref="uM"/>
        <units name="kg_per_m3" units_ref="kg_per_m3"/>
        <units name="m3_per_kg" units_ref="m3_per_kg"/>
        <units name="per_m3" units_ref="per_m3"/>
        <units name="mol_per_m2_s" units_ref="mol_per_m2_s"/>
        <units name="mM_m_per_s" units_ref="mM_m_per_s"/>
        <units name="J_per_m2_s" units_ref="J_per_m2_s"/>
        <units name="Js_per_m4" units_ref="Js_per_m4"/>
        <units name="mM_per_s" units_ref="mM_per_s"/>
        <units name="per_s" units_ref="per_s"/>
        <units name="per_mM_s" units_ref="per_mM_s"/>
        <units name="m6_per_mol2_s" units_ref="m6_per_mol2_s"/>
        <units name="m3_per_mol" units_ref="m3_per_mol"/>
        <units name="mol_per_m3_s" units_ref="mol_per_m3_s"/>
        <units name="per_mol" units_ref="per_mol"/>
        <units name="J_per_mol_K" units_ref="J_per_mol_K"/>
        <units name="m2_per_s" units_ref="m2_per_s"/>
        <units name="per_C" units_ref="per_C"/>
        <units name="per_m" units_ref="per_m"/>
        <units name="per_mM" units_ref="per_mM"/>
        <units name="Js2_per_m2" units_ref="Js2_per_m2"/>
        <units name="Js_per_m2" units_ref="Js_per_m2"/>
        <units name="J_per_m2" units_ref="J_per_m2"/>
        <units name="m_per_s2" units_ref="m_per_s2"/>
        <units name="rad_per_s2" units_ref="rad_per_s2"/>
        <units name="Js_per_m3" units_ref="Js_per_m3"/>
        <units name="Js2_per_m5" units_ref="Js2_per_m5"/>
        <units name="m5_per_Js2" units_ref="m5_per_Js2"/>
        <units name="J_per_m6" units_ref="J_per_m6"/>
        <units name="m6_per_J" units_ref="m6_per_J"/>
        <units name="m6_per_Js" units_ref="m6_per_Js"/>
        <units name="mm6_per_J" units_ref="mm6_per_J"/>
        <units name="Js2_per_m9" units_ref="Js2_per_m9"/>
        <units name="m6s_per_J" units_ref="m6s_per_J"/>
        <units name="Js_per_m6" units_ref="Js_per_m6"/>
        <units name="Js2_per_m6" units_ref="Js2_per_m6"/>
        <units name="m3_per_s2" units_ref="m3_per_s2"/>
        <units name="mm3_per_s2" units_ref="mm3_per_s2"/>
        <units name="per_mm3" units_ref="per_mm3"/>
        <units name="UnitValve" units_ref="UnitValve"/>
        <units name="J_per_m9" units_ref="J_per_m9"/>
        <units name="milliV" units_ref="milliV"/>
        <units name="per_milliV" units_ref="per_milliV"/>
        <units name="millis_per_milliV" units_ref="millis_per_milliV"/>
        <units name="per_V" units_ref="per_V"/>
        <units name="milliV_per_V" units_ref="milliV_per_V"/>
        <units name="V_per_milliV" units_ref="V_per_milliV"/>
        <units name="V_per_s" units_ref="V_per_s"/>
        <units name="milliV_per_kiloV" units_ref="milliV_per_kiloV"/>
        <units name="V2" units_ref="V2"/>
        <units name="milliV2" units_ref="milliV2"/>
        <units name="millimol" units_ref="millimol"/>
        <units name="millimolar" units_ref="millimolar"/>
        <units name="per_millimolar" units_ref="per_millimolar"/>
        <units name="per_millimolar_s" units_ref="per_millimolar_s"/>
        <units name="per_millimolar2_s" units_ref="per_millimolar2_s"/>
        <units name="millimolar_per_s" units_ref="millimolar_per_s"/>
        <units name="millimolar_per_megamolar" units_ref="millimolar_per_megamolar"/>
        <units name="per_millimol_milliS" units_ref="per_millimol_milliS"/>
        <units name="per_millimol_millis" units_ref="per_millimol_millis"/>
        <units name="per_millimol_s" units_ref="per_millimol_s"/>
        <units name="microm" units_ref="microm"/>
        <units name="microS" units_ref="microS"/>
        <units name="microm3" units_ref="microm3"/>
        <units name="m3_per_microm3" units_ref="m3_per_microm3"/>
        <units name="picoF" units_ref="picoF"/>
        <units name="S_per_F" units_ref="S_per_F"/>
        <units name="m3_per_Fs" units_ref="m3_per_Fs"/>
        <units name="A_per_F" units_ref="A_per_F"/>
        <units name="megaOhm" units_ref="megaOhm"/>
        <units name="nanoA" units_ref="nanoA"/>
        <units name="nanoA_per_milliA" units_ref="nanoA_per_milliA"/>
        <units name="nanoA_per_A" units_ref="nanoA_per_A"/>
        <units name="A_per_nanoA" units_ref="A_per_nanoA"/>
        <units name="C_per_mol" units_ref="C_per_mol"/>
        <units name="m3_per_J_millis" units_ref="m3_per_J_millis"/>
        <units name="m3_per_mol_millis" units_ref="m3_per_mol_millis"/>
        <units name="m3_per_millimol_s" units_ref="m3_per_millimol_s"/>
        <units name="millimol_per_m3" units_ref="millimol_per_m3"/>
        <units name="Hz2" units_ref="Hz2"/>
        <units name="cm" units_ref="cm"/>
        <units name="J_per_m4_s" units_ref="J_per_m4_s"/>
        <units name="m3_per_mol_per_sec" units_ref="m3_per_mol_per_sec"/>
        <units name="mol_per_m3_per_kPa" units_ref="mol_per_m3_per_kPa"/>
        <units name="mol_per_m3_per_Pa" units_ref="mol_per_m3_per_Pa"/>
        <units name="m3_per_mol_per_s" units_ref="m3_per_mol_per_s"/>
        <units name="mol_per_m3_per_s" units_ref="mol_per_m3_per_s"/>
        <units name="dim" units_ref="dim"/>
        <units name="fmol" units_ref="fmol"/>
        <units name="per_fmol" units_ref="per_fmol"/>
        <units name="nJ_per_s" units_ref="nJ_per_s"/>
        <units name="fmol_per_s" units_ref="fmol_per_s"/>
        <units name="nC_per_fmol" units_ref="nC_per_fmol"/>
        <units name="nC" units_ref="nC"/>
        <units name="nJ_per_fmol" units_ref="nJ_per_fmol"/>
        <units name="nJ_per_nC" units_ref="nJ_per_nC"/>
        <units name="fC" units_ref="fC"/>
        <units name="fF" units_ref="fF"/>
        <units name="volt_per_sec" units_ref="volt_per_sec"/>
        <units name="J_per_K_per_mol" units_ref="J_per_K_per_mol"/>
        <units name="nS" units_ref="nS"/>
        <units name="nSmV" units_ref="nSmV"/>
        <units name="per_ms" units_ref="per_ms"/>
        <units name="mM4" units_ref="mM4"/>
        <units name="mM_per_ms" units_ref="mM_per_ms"/>
        <units name="mMms" units_ref="mMms"/>
        <units name="per_mMms" units_ref="per_mMms"/>
        <units name="molar" units_ref="molar"/>
        <units name="micromolar" units_ref="micromolar"/>
        <units name="nanomolar" units_ref="nanomolar"/>
        <units name="ms" units_ref="ms"/>
        <units name="m_cubed" units_ref="m_cubed"/>
        <units name="mV" units_ref="mV"/>
        <units name="m_cubed_per_second" units_ref="m_cubed_per_second"/>
        <units name="micromolar_m_cubed" units_ref="micromolar_m_cubed"/>
        <units name="C" units_ref="C"/>
        <units name="C_per_millimol" units_ref="C_per_millimol"/>
        <units name="picoA" units_ref="picoA"/>
        <units name="picoA_per_picoFarad" units_ref="picoA_per_picoFarad"/>
        <units name="microL" units_ref="microL"/>
        <units name="picoFarad" units_ref="picoFarad"/>
        <units name="cm3_per_second" units_ref="cm3_per_second"/>
        <units name="um3_per_second" units_ref="um3_per_second"/>
        <units name="m3mM" units_ref="m3mM"/>
        <units name="ms2" units_ref="ms2"/>
        <units name="nM3_per_ps" units_ref="nM3_per_ps"/>
        <units name="per_s_squared_m_cubed" units_ref="per_s_squared_m_cubed"/>
        <units name="per_meters_cubed" units_ref="per_meters_cubed"/>
        <units name="umeter3" units_ref="umeter3"/>
        <units name="mill1" units_ref="mill1"/>
        <units name="picoV" units_ref="picoV"/>
        <units name="pic0" units_ref="pic0"/>
        <units name="nanoV" units_ref="nanoV"/>
        <units name="nan0" units_ref="nan0"/>
    </import>
    <component name="complete_capillary">
        <!-- SHARED ////////////////////////////////////////////////////-->
        <variable name="t" units="second"/>
        <variable initial_value="0.0" name="beta_g" units="dimensionless"/>
        <variable initial_value="1050" name="rho" units="Js2_per_m5"/>
        <variable initial_value="0.004" name="mu" units="Js_per_m3"/>
        <variable initial_value="9.81" name="g" units="m_per_s2"/>
        <variable initial_value="0.2802" name="a_vessel" units="dimensionless"/>
        <variable initial_value="-505.3" name="b_vessel" units="per_m"/>
        <variable initial_value="0.1324" name="c_vessel" units="dimensionless"/>
        <variable initial_value="-11.14" name="d_vessel" units="per_m"/>
        <!-- VV SPLIT TYPE /////////////////////////////////////////////-->
        <!-- Constitutive parameters-->
        <variable initial_value="0.0" name="theta_input_vessel" units="dimensionless"/>
        <variable initial_value="400000.0" name="E_input_vessel" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_input_vessel" units="metre"/>
        <variable name="h_input_vessel" units="metre"/>
        <variable initial_value="4e-06" name="r_input_vessel" units="metre"/>
        <variable name="I_input_vessel" units="Js2_per_m6"/>
        <variable name="C_input_vessel" units="m6_per_J"/>
        <variable name="R_input_vessel" units="Js_per_m6"/>
        <variable name="R_v_input_vessel" units="Js_per_m6"/>
        <!-- State Variables-->
        <variable initial_value="0.0" name="u_ext_input_vessel" units="J_per_m3"/>
        <variable name="u_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="v_input_vessel" public_interface="out" units="m3_per_s"/>
        <variable name="u_d_input_vessel" units="J_per_m3"/>
        <variable initial_value="1e-07" name="v_in_input_vessel" units="m3_per_s"/>
        <variable name="u_C_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_input_vessel" public_interface="out" units="m3"/>
        <variable name="u_C_d_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_d_input_vessel" public_interface="out" units="m3"/>
        <variable name="v_out_1_input_vessel" units="m3_per_s"/>
        <variable name="v_out_2_input_vessel" units="m3_per_s"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_input_vessel</ci>
                <apply>
                    <times/>
                    <ci>r_input_vessel</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_input_vessel</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_input_vessel</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_input_vessel</ci>
                        <ci>h_input_vessel</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_v_input_vessel</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="second">0.01</cn>
                    <ci>C_input_vessel</ci>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_input_vessel</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <ci>u_input_vessel</ci>
                                <ci>u_d_input_vessel</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>R_input_vessel</ci>
                                <ci>v_input_vessel</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>beta_g</ci>
                            <ci>rho</ci>
                            <ci>g</ci>
                            <ci>l_input_vessel</ci>
                            <apply>
                                <cos/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>theta_input_vessel</ci>
                                        <pi/>
                                    </apply>
                                    <cn cellml:units="dimensionless">180</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <ci>I_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_input_vessel</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in_input_vessel</ci>
                    <ci>v_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C_input_vessel</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_input_vessel</ci>
                        <apply>
                            <divide/>
                            <ci>C_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>u_ext_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_d_input_vessel</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_input_vessel</ci>
                        <ci>v_out_1_input_vessel</ci>
                    </apply>
                    <ci>v_out_2_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C_d_input_vessel</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_d_input_vessel</ci>
                        <apply>
                            <divide/>
                            <ci>C_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>u_ext_input_vessel</ci>
                </apply>
            </apply>
            <!-- Original DAE Equations
 u_input_vessel             = u_C_input_vessel+2{dimensionless}*R_v_input_vessel*(v_in_input_vessel-v_input_vessel);
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-v_out_1_input_vessel-v_out_2_input_vessel);-->
            <!-- DAE -> ODE Transformation (for one equation)
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-v_out_1_input_vessel-v_out_2_input_vessel);-->
            <!-- DAE
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-(u_d_input_vessel-u_pericyte_0)/R_pericyte_0-(u_d_input_vessel-u_pericyte_1)/R_pericyte_1);-->
            <!-- ODE-->
            <apply>
                <eq/>
                <ci>u_input_vessel</ci>
                <ci>u_C_input_vessel</ci>
            </apply>
            <apply>
                <eq/>
                <ci>u_d_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <ci>u_C_d_input_vessel</ci>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>R_v_input_vessel</ci>
                            <apply>
                                <plus/>
                                <ci>v_input_vessel</ci>
                                <apply>
                                    <divide/>
                                    <ci>u_pericyte_0</ci>
                                    <ci>R_pericyte_0</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">2</cn>
                                <ci>R_v_input_vessel</ci>
                                <cn cellml:units="dimensionless">1</cn>
                            </apply>
                            <ci>R_pericyte_0</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- PV CONSTRICTION TYPE (PERICYTE) //////////////////////////////////-->
        <!-- Percicyte 0-->
        <variable initial_value="1.0" name="C_pericyte_0" units="m6_per_J"/>
        <variable initial_value="1.0" name="R_pericyte_0" units="Js_per_m6"/>
        <variable initial_value="0.0" name="u_ext_pericyte_0" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_pericyte_0" units="m3"/>
        <!-- u_in_pericyte_0 is u_d_input_vessel
 v_pericyte_0 is v_out_1_input_vessel-->
        <variable initial_value="0.0" name="v_out_pericyte_0" units="m3_per_s"/>
        <variable name="u_pericyte_0" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_out_1_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u_d_input_vessel</ci>
                        <ci>u_pericyte_0</ci>
                    </apply>
                    <ci>R_pericyte_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_pericyte_0</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_1_input_vessel</ci>
                    <ci>v_out_pericyte_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pericyte_0</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_pericyte_0</ci>
                        <ci>C_pericyte_0</ci>
                    </apply>
                    <ci>u_ext_pericyte_0</ci>
                </apply>
            </apply>
        </math>
        <!-- Percicyte 1-->
        <variable initial_value="0.0" name="u_ext_pericyte_1" units="J_per_m3"/>
        <variable initial_value="1.0" name="C_pericyte_1" units="m6_per_J"/>
        <variable initial_value="1.0" name="R_pericyte_1" units="Js_per_m6"/>
        <variable initial_value="0.0" name="q_C_pericyte_1" units="m3"/>
        <!-- u_in_pericyte_1 is u_d_input_vessel
 v_pericyte_1 is v_out_2_input_vessel-->
        <variable initial_value="0.0" name="v_out_pericyte_1" units="m3_per_s"/>
        <variable name="u_pericyte_1" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_out_2_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u_d_input_vessel</ci>
                        <ci>u_pericyte_1</ci>
                    </apply>
                    <ci>R_pericyte_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_pericyte_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_2_input_vessel</ci>
                    <ci>v_out_pericyte_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pericyte_1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_pericyte_1</ci>
                        <ci>C_pericyte_1</ci>
                    </apply>
                    <ci>u_ext_pericyte_1</ci>
                </apply>
            </apply>
        </math>
        <!-- PV SPLIT CAPILLARY ////////////////////////////////////////-->
        <variable initial_value="1e-18" name="q_C_init_capillary_0" units="m3"/>
        <variable initial_value="q_C_init_capillary_0" name="q_C_capillary_0" units="m3"/>
        <variable initial_value="400000.0" name="E_capillary_0" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_capillary_0" units="metre"/>
        <variable initial_value="2e-06" name="r_capillary_0" units="metre"/>
        <variable initial_value="0.0" name="u_ext_capillary_0" units="J_per_m3"/>
        <variable initial_value="0.25e-7" name="v_out_1_capillary_0" units="m3_per_s"/>
        <variable initial_value="0.25e-7" name="v_out_2_capillary_0" units="m3_per_s"/>
        <variable name="v_out_total_capillary_0" units="m3_per_s"/>
        <variable name="h_capillary_0" units="metre"/>
        <variable name="C_capillary_0" units="m6_per_J"/>
        <variable name="R_capillary_0" units="Js_per_m6"/>
        <variable name="I_capillary_0" units="Js2_per_m6"/>
        <!-- u_in_capillary_0 is u_pericyte_0
 v_capillary_0 is v_out_pericyte_0-->
        <variable name="u_capillary_0" units="J_per_m3"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_capillary_0</ci>
                <apply>
                    <times/>
                    <ci>r_capillary_0</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_capillary_0</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_capillary_0</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_capillary_0</ci>
                        <ci>h_capillary_0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_out_pericyte_0</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pericyte_0</ci>
                            <ci>u_capillary_0</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_capillary_0</ci>
                            <ci>v_out_pericyte_0</ci>
                        </apply>
                    </apply>
                    <ci>I_capillary_0</ci>
                </apply>
            </apply>
            <!-- the below allows non constant compliance-->
            <apply>
                <eq/>
                <ci>v_out_total_capillary_0</ci>
                <apply>
                    <plus/>
                    <ci>v_out_1_capillary_0</ci>
                    <ci>v_out_2_capillary_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_capillary_0</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_pericyte_0</ci>
                    <ci>v_out_total_capillary_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_capillary_0</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_capillary_0</ci>
                        <ci>C_capillary_0</ci>
                    </apply>
                    <ci>u_ext_capillary_0</ci>
                </apply>
            </apply>
        </math>
        <variable initial_value="1e-18" name="q_C_init_capillary_1" units="m3"/>
        <variable initial_value="q_C_init_capillary_1" name="q_C_capillary_1" units="m3"/>
        <variable initial_value="400000.0" name="E_capillary_1" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_capillary_1" units="metre"/>
        <variable initial_value="2e-06" name="r_capillary_1" units="metre"/>
        <variable initial_value="0.0" name="u_ext_capillary_1" units="J_per_m3"/>
        <variable initial_value="0.25e-7" name="v_out_1_capillary_1" units="m3_per_s"/>
        <variable initial_value="0.25e-7" name="v_out_2_capillary_1" units="m3_per_s"/>
        <variable name="v_out_total_capillary_1" units="m3_per_s"/>
        <variable name="h_capillary_1" units="metre"/>
        <variable name="C_capillary_1" units="m6_per_J"/>
        <variable name="R_capillary_1" units="Js_per_m6"/>
        <variable name="I_capillary_1" units="Js2_per_m6"/>
        <!-- u_in_capillary_1 is u_pericyte_1
 v_capillary_1 is v_out_pericyte_1-->
        <variable name="u_capillary_1" units="J_per_m3"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_capillary_1</ci>
                <apply>
                    <times/>
                    <ci>r_capillary_1</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_capillary_1</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_capillary_1</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_1</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_capillary_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_capillary_1</ci>
                        <ci>h_capillary_1</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_capillary_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_1</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_out_pericyte_1</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pericyte_1</ci>
                            <ci>u_capillary_1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_capillary_1</ci>
                            <ci>v_out_pericyte_1</ci>
                        </apply>
                    </apply>
                    <ci>I_capillary_1</ci>
                </apply>
            </apply>
            <!-- the below allows non constant compliance-->
            <apply>
                <eq/>
                <ci>v_out_total_capillary_1</ci>
                <apply>
                    <plus/>
                    <ci>v_out_1_capillary_1</ci>
                    <ci>v_out_2_capillary_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_capillary_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_pericyte_1</ci>
                    <ci>v_out_total_capillary_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_capillary_1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_capillary_1</ci>
                        <ci>C_capillary_1</ci>
                    </apply>
                    <ci>u_ext_capillary_1</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
